PsychoPy2experiment version="2023.2.2"
Settings
  Audio latency priority = 0
  Audio lib = ptb
  Experiment info = {'participant': '0'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1400,1050]
  expName = untitled
  keyboardBackend = ioHub
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Routines
  Routine localizer
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    ImageComponent localizer_img
      durationEstim = 0.5
      image = stimuli/Gesicht.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 0
      stopVal [duration (s)] = $t_img_localizer
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    TextComponent localizer_isi
      durationEstim = 2.5
      letterHeight = 0.05
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = $t_isi_localizer
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    KeyboardComponent key_resp_localizer
      allowedKeys = 'y', 'g', 'b', 'r'
      durationEstim = 1.5
      forceEndRoutine = False
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1.5
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    SoundComponent sound_correct
      durationEstim = 0.5
      sound = sounds/soundCoin.wav
      startVal [time (s)] = 5
      stopVal [duration (s)] = 0.5
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    SoundComponent sound_wrong
      sound = sounds/soundError.wav
      startVal [time (s)] = 5
      stopVal [duration (s)] = 0.5
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    CodeComponent localizer_code
      Code Type = Py
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      Begin Routine:
        df_block = df_localizer[df_localizer['block']==i_block].reset_index()
        df_trial = df_block.iloc[i_localizer]

        localizer_img.image = df_trial.img
        localizer_isi.duration = df_trial.isi
        is_distractor = df_trial.distractor

        # prevent inactive sound from blocking trial finish
        sound_correct.status = FINISHED
        sound_wrong.status = FINISHED

        played = False

        if is_distractor:
            localizer_img.ori  = 180
        else:
            localizer_img.ori  = 0

        msg = f'localizer {i_localizer}/{len(df_block)}'
        msg += f' block {i_block}/{max(df_localizer["block"])} {"[FLIPPED]" if is_distractor else ""} isi={localizer_isi.duration:.2f}'
        print(msg)
      Each Frame:
        # play for wrong/correct button presses
        if len(key_resp_localizer.keys) and not played:
            played = True
            if is_distractor:
                sound_correct.play()
                reward_count += reward_amount
                print('Correct press')
            else:
                sound_wrong.play()
                reward_count -= reward_amount
                false_alarms += 1
                print('False alarm')

        # play error in case of missed button press
        if is_distractor and key_resp_localizer.status==FINISHED and not played:
            played = True
            sound_wrong.play()
            misses += 1
            print('Miss')
            reward_count -= reward_amount

        sound_correct.status = FINISHED
        sound_wrong.status = FINISHED
      End Routine:
        i_localizer+=1
  Routine sequence
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    ImageComponent sequence_img_1
      durationEstim = 0.1
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $t_img_sequence
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    TextComponent sequence_isi_1
      letterHeight = 0.05
      startVal [time (s)] = 0.1
      stopVal [duration (s)] = 0.064
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    ImageComponent sequence_img_2
      durationEstim = 0.1
      size = (0.5, 0.5)
      startVal [time (s)] = 0.164
      stopVal [duration (s)] = $t_img_sequence
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    TextComponent sequence_isi_2
      letterHeight = 0.05
      startVal [time (s)] = 0.264
      stopVal [duration (s)] = 0.064
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    ImageComponent sequence_img_3
      durationEstim = 0.1
      size = (0.5, 0.5)
      startVal [time (s)] = 0.328
      stopVal [duration (s)] = $t_img_sequence
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    TextComponent sequence_isi_3
      letterHeight = 0.05
      startVal [time (s)] = 0.428
      stopVal [duration (s)] = 0.064
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    ImageComponent sequence_img_4
      durationEstim = 0.1
      size = (0.5, 0.5)
      startVal [time (s)] = 0.492
      stopVal [duration (s)] = $t_img_sequence
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    TextComponent sequence_isi_4
      letterHeight = 0.05
      startVal [time (s)] = 0.592
      stopVal [duration (s)] = 0.064
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    ImageComponent sequence_img_5
      durationEstim = 0.1
      size = (0.5, 0.5)
      startVal [time (s)] = 0.656
      stopVal [duration (s)] = $t_img_sequence
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    TextComponent sequence_isi_5
      letterHeight = 0.05
      startVal [time (s)] = 0.756
      stopVal [duration (s)] = 0.064
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    CodeComponent sequence_code
      Code Type = Py
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      Begin Routine:
        for img_x in range(5):
            component_seq = locals()[f'sequence_img_{img_x+1}']
            component_isi = locals()[f'sequence_isi_{img_x+1}']

            t_isi =  df_trial[f'isi']
            component_seq.image = df_trial[f'img{img_x}']
            component_seq.start = (t_isi+0.1)*img_x
            component_isi.start = (t_isi+0.1)*img_x + 0.1
            component_isi.duration = t_isi
      End Routine:
        i_sequence += 1
  Routine startup_code
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    CodeComponent settings
      Code Type = Auto->JS
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      Begin Experiment:
        t_img_sequence = 0.1
        t_img_localizer = 0.5
        t_isi_localizer = 2.0

        reward_amount = 0.03  # +-3 ct per trial

        n_localizer_trials = 5
        n_sequence_trials = 3
    CodeComponent startup
      Code Type = Auto->JS
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      Begin Experiment:
        import pandas as pd

        subj_id = 0

        df_localizer = pd.read_csv(f'./sequences/localizer_{subj_id}.csv')
        df_sequences = pd.read_csv(f'./sequences/sequences_{subj_id}.csv')

        print('DUMMY TRIALS: subj_id is set to 0')

        # set variables we will access later
        i_localizer = 0
        i_sequence = 0
        i_block = 0

        letter_height=0.04

        # store reward
        reward_count = 0
        false_alarms = 0
        misses = 0
        wrong_answers = 0

        # set the number of repetitions we have
        n_blocks = 1
        n_localizer_trials = 6
        n_sequence_trials = 3
  Routine buffer
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    TextComponent buffer_fixation
      color = -0.7960, -0.7960, -0.7960
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 6
      text = •
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    SoundComponent sound_birds
      disabled = True
      sound = sounds/soundWait.wav
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 6
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    CodeComponent buffer_code
      Code Type = Auto->JS
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      Begin Routine:
        isi = df_sequences[f'isi_block_{i_block}'].iloc[img_x]
        buffer_isi.duration = 6 - (5*0.1 + 5*isi)
      Each Frame:
        if buffer_fixation.status==FINISHED:
            sound_birds.stop()
  Routine question
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    KeyboardComponent question_key_resp
      allowedKeys = 'g', 'b'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent question_text
      letterHeight = 0.05
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
      text = Did X come before Y?
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    ImageComponent img_question
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
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    CodeComponent question_code
      Code Type = Py
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      Begin Routine:
        choices = [df_trial.target_idx, df_trial.lure_idx]
        if df_trial.correct_pos=='r':
            choices = choices[::-1]

        img_question.image = df_trial['img{df_trial.target_idx-1}']
        question_code.text = '    ?    '.join(choices)
  Routine cue
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    TextComponent cue_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = dummy
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    CodeComponent cue_code
      Code Type = Py
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      Begin Routine:
        df_block = df_sequences[df_sequences['block']==i_block].reset_index()
        df_trial = df_block.iloc[i_sequence]

        cue_text.text = df_trial.cue
  Routine fixation_dot
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    TextComponent localizer_fixation
      color = -0.7960, -0.7960, -0.7960
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = •
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  Routine blank1500
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
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  Routine feedback
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    SoundComponent sound_correct_2
      durationEstim = 0.5
      sound = sounds/soundCoin.wav
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.5
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    SoundComponent sound_wrong_2
      sound = sounds/soundError.wav
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.5
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    CodeComponent code_feedbackseq
      Code Type = Auto->JS
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      Begin Routine:
        # play for wrong/correct button presses
        # mapping from keys to positions
        sound_correct.status = FINISHED
        sound_wrong.status = FINISHED

        mapping = {'r': 'u', 'y': 'd', 'b': 'r', 'g': 'l'}
        if len(question_key_resp.keys):
            key_pos = mapping[question_key_resp.keys[-1]]
            if key_pos==df_trial.correct_pos:
                sound_correct.play()
                print('Correct answer')
            else:
                sound_wrong.play()
                wrong_presses += 1
                print('Wrong answer')
        else:
            # play error in case of missed button press
            sound_wrong.play()
            misses += 1
            print('Miss')

            reward_count -= reward_amount
  Routine instruct_task1
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    ImageComponent image_6
      image = stimuli/Stuhl.jpg
      ori = 180
      size = 0.25
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_3
      allowedKeys = 'y','b','r', 'g'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_2
      letterHeight = letter_height
      startVal [time (s)] = 0.0
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      text:
        In der ersten Aufgabe sollen sie immer eine Taste drücken, wenn ein Bild falsch herum (auf den Kopf gedreht) gezeigt wird. Beispiel:








        Bitte antworten Sie jeweils so schnell und genau wie möglich. Sie haben bei jedem Bild 1,5 Sekunden Zeit zu antworten.

        Drücken Sie eine Taste um fortzufahren.
  Routine instruct_welcome
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    KeyboardComponent key_resp
      allowedKeys = 'r','g', 'b', 'y'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    ImageComponent image
      image = stimuli/Gesicht.jpg
      pos = (2, 2)
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    ImageComponent image_2
      image = stimuli/Haus.jpg
      pos = (2, 0)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    ImageComponent image_3
      image = stimuli/Katze.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    ImageComponent image_4
      image = stimuli/Schuh.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    ImageComponent image_5
      image = stimuli/Stuhl.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    CodeComponent code
      Code Type = Py
      Begin Routine:
        for i, img in enumerate([image, image_2, image_3, image_4, image_5]):
            img.pos = [(i-2)/4, -0.35]
            img.size = 0.18
    TextboxComponent textbox_3
      alignment = top-center
      bold = False
      borderWidth = 0
      editable = False
      letterHeight = letter_height
      size = (1, 1)
      startVal [time (s)] = 0.0
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      text:
        Willkommen zur Studie
        <b>“Visuelle Objekte Erkennen”</b>

        Das Experiment “Visuelle Objekte Erkennen” besteht aus zwei Aufgaben bei denen wir Ihnen Bilder von alltäglichen Objekten zeigen. Dabei sollen Sie sich immer jedes Bild genau anschauen. Während des Experiments werden Sie abwechselnd zwei verschiedene Aufgaben bearbeiten, die wir Ihnen im Folgenden genau erklären.

        Drücken Sie eine Taste um fortzufahren.
  Routine instruct_task1_2
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    KeyboardComponent key_resp_2
      allowedKeys = 'y','b','r', 'g'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_4
      letterHeight = letter_height
      startVal [time (s)] = 0.0
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      text:
        Immer wenn Sie eine richtige Antwort gegeben haben, hören Sie kurz das Geräusch einer Münze über die Kopfhörer.

        Sie sollen nicht reagieren, wenn ein Bild richtig herum gezeigt wird.

        Für jedes umgedrehte Bild, das Sie richtig erkannt haben, erhalten Sie eine Belohnung von 3 Cent. Wenn Sie eine falsche Antwort geben (also eine Taste drücken, obwohl das Bild richtig herum dargestellt wurde), werden Ihnen 3 Cent abgezogen.

        Sie sehen nun eine Übung der Aufgabe.
        Drücken Sie eine Taste um fortzufahren.
  Routine localizer_feedback
    KeyboardComponent key_resp_4
      allowedKeys = 'y', 'g', 'b', 'r'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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
    TextComponent text_feedback
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = ... dummy ... something went wrong
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    CodeComponent code_2
      Code Type = Py
      Begin Routine:
        if false_alarms==0 and misses==0:
            localizer_repetition.finished=True
            feedback_string = 'Gratuliere, Sie haben alles richtig gemacht!\n\n'
            feedback_string += 'Es geht nun weiter mit einer Übung der zweiten Aufgabe.\n\n'
            feedback_string += 'Bitte drücken Sie eine Taste um fortzufahren.'
            text_feedback.text = feedback_string
        else:
            feedback_string = ''
            if misses:
                feedback_string += f'Sie haben {misses}x verpasst eine Taste bei einem auf dem Kopf stehenden Bild zu drücken.\n'
            if false_alarms:
                feedback_string += f'Sie haben {false_alarms}x an der falschen  Stelle gedrückt.\n'
            feedback_string += '\n\nDrücken Sie nur eine Taste, wenn ein Bild falsch herum ist. '
            feedback_string += 'Falls Sie Fragen haben, stellen Sie diese gerne dem Experimentleiter.\n'
            feedback_string += '\nDrücken Sie eine beliebige Taste um die Übung zu wiederholen.'
            text_feedback.text = feedback_string

            # reset counters
            i_localizer = 0
            false_alarms = 0
            misses = 0
  Routine instruct_exp2
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    TextComponent text_3
      letterHeight = letter_height
      startVal [time (s)] = 0.0
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      text:
        In der zweiten Aufgabe wir Ihnen erst ein Wort gezeigt, das eines der fünf Bilder beschreibt.

        Kurz danach werden ihnen alle fünf Bilder in sehr schneller, zufälliger Reihenfolge abgespielt. Ihre Aufgabe ist es, sich zu merken an welcher Stelle der Gegenstand des vorher gezeigten Wortes ist.
        Die Geschwindigkeit mit der die Bilder gezeigt werden, ist in jedem Durchgang unterschiedlich und wird in einigen Fällen sehr schnell sein.

        Deshalb ist es wichtig, dass Sie sich die Abfolge der Bilder aufmerksamm anschauen und sich die Position merken, an der das vorgegebene Objekt das erste Mal erschienen ist.

        Bitte drücken Sie eine Taste um mit einer Übung zu starten.
    KeyboardComponent key_resp_5
      allowedKeys = 'r', 'g', 'b', 'y'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine sequence_feedback
    KeyboardComponent key_resp_6
      allowedKeys = 'r', 'g' , 'b', 'y'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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
    TextComponent text_feedback_seq
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = dummy... something went wrong
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    CodeComponent code_seqfeedback
      Code Type = Py
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      Begin Routine:
        if wrong_answers==0 and misses==0:
            sequence_repetition.finished=True
            feedback_string = 'Sie haben bei allen drei Optionen die richtige Position bestimmt. Gratuliere!'
            feedback_string += 'Die Übung ist nun beendet. Bitte melden Sie sich beim Experimentleiter.'
            feedback_string += 'Falls Sie noch Fragen haben, stellen Sie diese gerne.'
        else:
            feedback_string = ''
            if wrong_answers:
                feedback_string += f'Sie haben {wrong_answers}x falsch geantwortet.'
            if misses:
                feedback_string += f'Sie haben {misses}x verpasst zu antworten. Bitte antworten Sie schnell genug!'
            feedback_string += 'Falls Sie Fragen haben, stellen Sie diese gerne dem Experimentleiter.\n'
            feedback_string += '\nDrücken Sie eine beliebige Taste um die Übung zu wiederholen.'
            text_feedback_seq.text = feedback_string

            # reset counters
            wrong_answers = 0
            misses = 0
            i_sequence = 0
Flow
  Routine startup_code
  Routine instruct_welcome
  Routine instruct_task1
  Routine instruct_task1_2
  LoopInitiator localizer_repetition loopType="TrialHandler"
    loopType = random
    nReps = 100
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    LoopInitiator localizer_trials loopType="TrialHandler"
      loopType = sequential
      nReps = n_localizer_trials
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      Routine fixation_dot
      Routine localizer
    LoopTerminator localizer_trials
    Routine localizer_feedback
  LoopTerminator localizer_repetition
  Routine instruct_exp2
  LoopInitiator sequence_repetition loopType="TrialHandler"
    loopType = sequential
    nReps = 99
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    LoopInitiator sequence_trials loopType="TrialHandler"
      loopType = sequential
      nReps = n_sequence_trials
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      Routine cue
      Routine blank1500
      Routine fixation_dot
      Routine sequence
      Routine buffer
      Routine question
      Routine feedback
    LoopTerminator sequence_trials
    Routine sequence_feedback
  LoopTerminator sequence_repetition
